PsychoPy2experiment version="1.80.03"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  color = $[-1,-1,-1]
  Window size (pixels) = [1280, 800]
  Full-screen window = True
  Experiment info = {u'Mano (D/S)': u'D', u'Genere (M/F)': u'M', u'participant': u'1', u'Et\xe0': u'1', u'Nome': u'Leo'}
  Save csv file = True
  expName = metaphor-comprehension
  Save excel file = True
  Units = use prefs
  Screen = 1
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Routines
  Routine reset
    TextComponent Fixation_point
      color = red
      text = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.5
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  Routine welcome_message
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent Introduction
      text [set every repeat] = $welcome_message
      startVal [time (s)] = 0.5
      font = Comic Sans MS
      letterHeight = 0.08
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    KeyboardComponent response
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.5
      store = nothing
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    CodeComponent code
      Begin Experiment:
        import utils.shuffleRows as shuffleRows
        file_input = ['./stimuli/arguments.csv', './stimuli/distractors.csv']
        file_output = '/tmp/arguments.csv'
        #shuffleRows.ShuffleRows(file_input, file_output)
    TextComponent text_4
      color = yellow
      text [set every repeat] = $welcome_message_end
      startVal [time (s)] = 0.5
      font = Comic Sans MS
      letterHeight = 0.07
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  Routine instructions_message
    TextComponent instructions_text
      text [set every repeat] = $instructions_message
      startVal [time (s)] = 0.0
      font = Comic Sans MS
      letterHeight = 0.053
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    TextComponent text_6
      color = yellow
      text [set every repeat] = $instructions_message_end
      startVal [time (s)] = 0.0
      font = Comic Sans MS
      letterHeight = 0.05
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine missing_word
    TextComponent text_2
      color = red
      text [set every repeat] = $TW
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      font = Comic Sans MS
      letterHeight = 0.18 
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  Routine question
    TextComponent question_text
      text [set every repeat] = $question
      startVal [time (s)] = 0.0
      font = Comic Sans MS
      letterHeight = 0.09
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    KeyboardComponent response_to_question_text
      forceEndRoutine = True
      allowedKeys = 'q', 'bracketright'
      startVal [time (s)] = 0.0
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    TextComponent answer_text
      color = yellow
      text [set every repeat] = $answer
      startVal [time (s)] = 0.0
      font = Comic Sans MS
      letterHeight = 0.1
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  Routine fixation_point
    TextComponent text_3
      color = red
      text [set every repeat] = $fixation_point_symbol
      stopVal [duration (s)] = 0.500
      startVal [time (s)] = 0.0
      letterHeight = 0.5
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  Routine arguments
    TextComponent arguments_text
      text [set every repeat] = 'P1: ' + $premise1 + '\n\n' +'P2: ' + $premise2 +'\n_______________________________\n\n' + 'C: ' + $conclusion
      startVal [time (s)] = 0.0
      font = Comic Sans MS
      letterHeight = 0.08
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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    TextComponent missing_word_text
      color = yellow
      text [set every repeat] = $show_missing_word
      startVal [time (s)] = 0.0
      font = Comic Sans MS
      letterHeight = 0.052
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Flow
  LoopInitiator experiment_instructions_loop loopType="TrialHandler"
    conditionsFile = instructions/experiment.xlsx
    loopType = sequential
    nReps = 1
    conditions = [{u'welcome_message_end': u'\n\n\n\n\n\n\n\n\n\n\n\n\n\n\n\nPremere la barra spaziatrice per continuare', u'welcome_message': u"                    BENVENTUTI!\n\nState per iniziare un esperimento composto da due parti.\nOgni parte \xe8 introdotta dalle istruzioni che vi spiegheranno ci\xf2 che dovete fare in seguito.\nAlla fine della prima parte, ci sar\xe0 una piccola pausa indicata da un messaggio. Grazie per la vostra partecipazione all'esperimento!\n", u'instructions_message_end': u'\n\n\n\n\n\n\n\n\n\n\n\n\n\n\n\n\n\n\n\n\nPremete sulla barra spaziatrice per leggere gli argomenti.', u'in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    Routine welcome_message
    Routine instructions_message
  LoopTerminator experiment_instructions_loop
  LoopInitiator arguments_loop loopType="TrialHandler"
    conditionsFile = ../../../../../private/tmp/arguments.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [{'ArgumentType': u'TPTC', 'ArgumentNumber': 1, 'TWType': u'V', 'premise2': u'Una ... \xe8 vivace ', 'TW': u'SAMBA', 'premise1': u'La gioia \xe8 una ... ', 'CorrectAnswer': u'Y', 'ArgumentBlock': u'P', 'conclusion': u'La gioia \xe8 vivace'},
      {'ArgumentType': u'TPFC', 'ArgumentNumber': 2, 'TWType': u'V', 'premise2': u'Una ... Scende dalla nave ', 'TW': u'SCIALUPPA', 'premise1': u'Il conforto \xe8 una ... ', 'CorrectAnswer': u'N', 'ArgumentBlock': u'P', 'conclusion': u'Il conforto scende dalla nave'},
      {'ArgumentType': u'distrattore', 'ArgumentNumber': 2, 'TWType': u'distrattore', 'premise2': u'Una ... \xe8 una donna sposata ', 'TW': u'MOGLIE', 'premise1': u'Luigi ha una ... ', 'CorrectAnswer': u'N', 'ArgumentBlock': u'P', 'conclusion': u'Luigi \xe8 una donna sposata'},
      {'ArgumentType': u'distrattore', 'ArgumentNumber': 1, 'TWType': u'distrattore', 'premise2': u'... \xe8 una scienza ', 'TW': u'MEDICINA', 'premise1': u'Franco studia ...  ', 'CorrectAnswer': u'Y', 'ArgumentBlock': u'P', 'conclusion': u'Franco studia una scienza'},
      {'ArgumentType': u'TPPC', 'ArgumentNumber': 2, 'TWType': u'L', 'premise2': u'Un ... consente il riposo ', 'TW': u'APPRODO', 'premise1': u'La laurea \xe8 un ... ', 'CorrectAnswer': u'N', 'ArgumentBlock': u'P', 'conclusion': u'La laurea consente il riposo'}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
    LoopInitiator arguments_instructions_loop loopType="TrialHandler"
      conditionsFile = instructions/arguments.xlsx
      loopType = sequential
      nReps = 1
      conditions = [{u'answer': u'\n\n\n\n\n\n\n\n\n[q] <-- SI             NO --> [+]', u'show_missing_word': u'\n\n\n\n\n\n\n\n\n\n\n\n\n\n\n\n\nPremete la barra spaziatrice per visualizzare il termine mancante.', u'fixation_point_symbol': u'+', u'question': u'La conclusione segue dalla premesse?'}]
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      Routine arguments
      Routine missing_word
      Routine question
      Routine fixation_point
    LoopTerminator arguments_instructions_loop
  LoopTerminator arguments_loop
